<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateDirectories">
          <io:Path>D:\Data</io:Path>
          <io:SearchPattern>tests</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>DirFileName</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DirFileName</Name>
      </Expression>
      <Expression xsi:type="scr:PythonTransform">
        <scr:Name>filename</scr:Name>
        <scr:Description>image dir and  filename</scr:Description>
        <scr:Script>import clr

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  path = value + "\\" + "WideFieldCam_Blue"+ ".tiff"
  return path
</scr:Script>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DirFileName</Name>
      </Expression>
      <Expression xsi:type="scr:PythonTransform">
        <scr:Name>filename</scr:Name>
        <scr:Description>image dir and  filename</scr:Description>
        <scr:Script>import clr

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  path = value + "\\" + "WideFieldCam_Red"+ ".tiff"
  return path
</scr:Script>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveImage">
          <cv:FileName>D:\Data\tests\WideFieldCam_Red.tiff</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveImage">
          <cv:FileName>D:\Data\tests\WideFieldCam_Blue.tiff</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT5S</rx:DueTime>
          <rx:Period>PT10S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TriggeredWindow">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertScale">
                <dsp:Depth>F32</dsp:Depth>
                <dsp:Scale>1</dsp:Scale>
                <dsp:Shift>0</dsp:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:IncrementalMean" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT10S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="21" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="11" Label="Source1" />
      <Edge From="5" To="18" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="18" Label="Source2" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="17" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="20" To="24" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>